Application:Speller%20Targets matrix TargetDefinitions= 9 { Display Enter Display%20Size Icon%20File Sound Intensified%20Icon } A A 1 E:/Cognitask%202.0%20nautilus/terapia/Palabras/Amigos/img2.png % % B B 1 E:/Cognitask%202.0%20nautilus/terapia/Palabras/Amigos/img1.png % % C C 1 E:/Cognitask%202.0%20nautilus/terapia/Palabras/Amigos/img6.png % % D D 1 E:/Cognitask%202.0%20nautilus/terapia/Palabras/Amigos/img4.png % % E E 1 E:\Cognitask%202.0%20nautilus/img/img0.png % % F F 1 E:\Cognitask%202.0%20nautilus/img/img0.png % % G G 1 E:/Cognitask%202.0%20nautilus/terapia/Palabras/Amigos/img5.png % % H H 1 E:/Cognitask%202.0%20nautilus/terapia/Palabras/Amigos/img3.png % % I I 1 E:\Cognitask%202.0%20nautilus/img/img0.png % % // speller target properties